PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial5
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Ready...
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    TextComponent start
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3.0
      text = Start
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  Routine L_L
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    PolygonComponent No1left
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent No1right
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    TextComponent left_1
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
      text = LEFT
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  Routine R_R
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    PolygonComponent No1left_2
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent No1right_2
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    TextComponent right
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
      text = RIGHT
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  Routine L_R
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    PolygonComponent No1left_3
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent No1right_3
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    TextComponent left_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
      text = LEFT
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  Routine R_L
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    PolygonComponent No1left_4
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent No1right_4
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
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    TextComponent right_2
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 3.0
      text = RIGHT
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  Routine end
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    TextComponent finish
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text = FINISHED
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  Routine left
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    PolygonComponent left1_5
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent right1_5
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Right
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    PolygonComponent left1_6
      fillColor = blue
      ori = -90
      pos = (-0.4, 0)
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent right1_6
      fillColor = red
      ori = 90
      pos = (0.4, 0)
      shape = arrow
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine welcome
  Routine L_L
  Routine left
  Routine R_L
  Routine left
  Routine L_L
  Routine left
  Routine R_L
  Routine left
  Routine L_L
  Routine left
  Routine R_L
  Routine left
  Routine L_R
  Routine Right
  Routine R_R
  Routine Right
  Routine L_R
  Routine Right
  Routine R_R
  Routine Right
  Routine L_L
  Routine left
  Routine R_R
  Routine Right
  Routine L_R
  Routine Right
  Routine R_R
  Routine Right
  Routine L_L
  Routine left
  Routine R_L
  Routine left
  Routine L_L
  Routine left
  Routine R_R
  Routine Right
  Routine L_L
  Routine left
  Routine R_R
  Routine Right
  Routine end
